PsychoPy2experiment version="2026.1.0"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $(-1.0000, -1.0000, -1.0000)
  expName = Final PM task
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instruction_2
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    TextComponent text
      color = $(0.2941, -0.6706, -0.6706)
      letterHeight = 0.10
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Please enter your Name below
      units = norm
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    TextboxComponent textbox
      bold = False
      color = $(0.2941, -0.6706, -0.6706)
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = $(0.2941, -0.6706, -0.6706)
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = After typing your first name, click the spacebar to continue 
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction1
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    ImageComponent image
      image = 1 instruction.png
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction2
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    ImageComponent image_2
      image = 2 instruction.png
      size = (1.5, 0.75)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction
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    TextComponent text_2
      color = $(0.2941, -0.6706, -0.6706)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please press the spacebar to start the task!
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    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trainingblock
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    TextComponent Targetword
      color [set every repeat] = $color
      letterHeight = 0.15
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      units = norm
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      text [set every repeat]:
        $mainword
    TextComponent leftword
      color [set every repeat] = $color
      letterHeight = 0.15
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $lword
      units = norm
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    TextComponent rightword
      color [set every repeat] = $color
      letterHeight = 0.15
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rword
      units = norm
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'left','right','space'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      storeCorrect = True
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  Routine MainTrial
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    TextComponent target_word
      color [set every repeat] = $color
      letterHeight = 0.15
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $mainword
      units = norm
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    TextComponent left_word
      color [set every repeat] = $color
      draggable = True
      letterHeight = 0.15
      pos = (-0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $lword
      units = norm
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    TextComponent right_word
      color [set every repeat] = $color
      letterHeight = 0.15
      pos = (0.3, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $rword
      units = norm
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right','space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Thankyou
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    TextComponent Thanks
      color = $(0.7255, -0.8431, -0.5294)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!

        Please click on the SPACE bar to exit
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'kuCr7lDHufWL', // ★ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ★
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
  Routine routine_1
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    KeyboardComponent key_resp_8
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction_2
  Routine instruction1
  Routine instruction2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Book1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'mainword': 'Dog', 'lword': 'Guy', 'rword': 'Canine', 'correctAns': 'right', 'color': 'orange'},
      {'mainword': 'Eagle', 'lword': 'Bison', 'rword': 'Star', 'correctAns': 'left', 'color': '#87369e'},
      {'mainword': 'Hair', 'lword': 'Skin', 'rword': 'Wig', 'correctAns': 'space', 'color': '#0cc0df'},
      {'mainword': 'Eraser', 'lword': 'Sketchpad', 'rword': 'Pill', 'correctAns': 'left', 'color': 'pink'}]
    Routine trainingblock
  LoopTerminator trials_2
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = FINAL word list.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'mainword': 'Pot', 'lword': 'Spatula', 'rword': 'Dog', 'corrAns': 'left', 'color': 'yellow'},
      {'mainword': 'Level', 'lword': 'Floor', 'rword': 'Chisel', 'corrAns': 'left', 'color': 'orange'},
      {'mainword': 'Trumpet', 'lword': 'Bed', 'rword': 'Clarinet', 'corrAns': 'right', 'color': 'pink'},
      {'mainword': 'Gin', 'lword': 'Whiskey', 'rword': 'Oak', 'corrAns': 'left', 'color': '#57c552'},
      {'mainword': 'Hail', 'lword': 'Vanilla', 'rword': 'Sleet', 'corrAns': 'right', 'color': '#ff3131'},
      {'mainword': 'Water', 'lword': 'Lemonande', 'rword': 'GingerAle', 'corrAns': 'space', 'color': '#0cc0df'},
      {'mainword': 'Saw', 'lword': 'Hammer', 'rword': 'Hurricane', 'corrAns': 'left', 'color': 'orange'},
      {'mainword': 'Football', 'lword': 'Milk', 'rword': 'Hockey', 'corrAns': 'right', 'color': '#87369e'},
      {'mainword': 'Vodka', 'lword': 'Wine', 'rword': 'Corn', 'corrAns': 'left', 'color': 'green'},
      {'mainword': 'Dog', 'lword': 'Horse', 'rword': 'Pea', 'corrAns': 'left', 'color': 'yellow'},
      {'mainword': 'Wool', 'lword': 'Rain', 'rword': 'Nylon', 'corrAns': 'right', 'color': 'pink'},
      {'mainword': 'Salt', 'lword': 'Cinnamon', 'rword': 'Mountain', 'corrAns': 'left', 'color': '#57c552'},
      {'mainword': 'Coffee', 'lword': 'Shirt', 'rword': 'Water', 'corrAns': 'right', 'color': '#ff3131'},
      {'mainword': 'Eagle', 'lword': 'Bluebird', 'rword': 'Salt', 'corrAns': 'left', 'color': 'green'},
      {'mainword': 'Gun', 'lword': 'Sword', 'rword': 'Football', 'corrAns': 'left', 'color': 'pink'}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
    Routine MainTrial
  LoopTerminator trials
  Routine Thankyou
